CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:61
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"C": "text", "ChannelName": "text", "ColorFormat": "text", "FileLocation": "text", "Frame": "text", "Plate": "text", "Series": "text", "Site": "text", "SizeC": "text", "SizeT": "text", "SizeX": "text", "SizeY": "text", "SizeZ": "text", "T": "text", "Well": "text", "Z": "text"}
    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:10
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Frame "44")
    Name to assign these images:nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "41")
    Name to assign these images:CD45
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "35")
    Name to assign these images:TCRb1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "8")
    Name to assign these images:CD20
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "46")
    Name to assign these images:vimentin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "40")
    Name to assign these images:CD7
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "9")
    Name to assign these images:CD68
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "29")
    Name to assign these images:CD14
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "42")
    Name to assign these images:CD11c
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "48")
    Name to assign these images:Keratin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Site

Smooth:[module_num:5|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
    Select the input image:nucleus
    Name the output image:Nuc_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
GrayToColor:[module_num:6|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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:CD7
    Select the image to be colored green:CD20
    Select the image to be colored blue:TCRb1
    Name the output image:lymphoid_color
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
ColorToGray:[module_num:7|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
    Select the input image:lymphoid_color
    Conversion method:Combine
    Image type:RGB
    Name the output image:lymphoid_grey
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
GrayToColor:[module_num:8|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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:CD68
    Select the image to be colored green:CD14
    Select the image to be colored blue:CD11c
    Name the output image:myeloid_color
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
ColorToGray:[module_num:9|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
    Select the input image:myeloid_color
    Conversion method:Combine
    Image type:RGB
    Name the output image:myeloid_grey
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
GrayToColor:[module_num:10|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
    Select a color scheme:RGB
    Rescale intensity:Yes
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    Select the image to be colored green:Keratin
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    Name the output image:Epithelium_color
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
ColorToGray:[module_num:11|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
    Select the input image:Epithelium_color
    Conversion method:Combine
    Image type:RGB
    Name the output image:Epithelium_grey
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:12|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notes:['identify nuclei']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
    Select the input image:nucleus
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1
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    Manual threshold:0.2
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
MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:14|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
    Select the objects to filter:Nuclei
    Name the output objects:NucFil
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:10
    Filter using a maximum measurement value?:No
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
IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:lymphoid_grey
    Name the primary objects to be identified:newcells
    Typical diameter of objects, in pixel units (Min,Max):5,10
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.0
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    Manual threshold:0.1
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
IdentifySecondaryObjects:[module_num:16|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notes:['identify cd45 cells']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
    Select the input objects:NucFil
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:lymphoid_grey
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1
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    Manual threshold:0.1
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
RelateObjects:[module_num:17|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
    Parent objects:Cells
    Child objects:newcells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects
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
FilterObjects:[module_num:18|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
    Select the objects to filter:Cells
    Name the output objects:lymphoidcells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:NotLymphoid
    Select the measurement to filter by:Children_newcells_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
IdentifyPrimaryObjects:[module_num:19|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
    Select the input image:myeloid_grey
    Name the primary objects to be identified:newmyeloid_notlymphoid
    Typical diameter of objects, in pixel units (Min,Max):5,10
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.2
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
IdentifySecondaryObjects:[module_num:20|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
    Select the input objects:NotLymphoid
    Name the objects to be identified:myeloid
    Select the method to identify the secondary objects:Propagation
    Select the input image:myeloid_grey
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    Regularization factor:1
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.2
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
RelateObjects:[module_num:21|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
    Parent objects:myeloid
    Child objects:newmyeloid_notlymphoid
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Relatemyl
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
FilterObjects:[module_num:22|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
    Select the objects to filter:myeloid
    Name the output objects:myeloidcells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:NOTmyeloid_NOTlymphoid
    Select the measurement to filter by:Children_newmyeloid_notlymphoid_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
IdentifyPrimaryObjects:[module_num:23|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
    Select the input image:vimentin
    Name the primary objects to be identified:newstromal_NOTmyeloid_lymphoidNOT
    Typical diameter of objects, in pixel units (Min,Max):5,10
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.2
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
IdentifySecondaryObjects:[module_num:24|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
    Select the input objects:NOTmyeloid_NOTlymphoid
    Name the objects to be identified:stromal
    Select the method to identify the secondary objects:Propagation
    Select the input image:vimentin
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    Regularization factor:1
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.2
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
RelateObjects:[module_num:25|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
    Parent objects:stromal
    Child objects:newstromal_NOTmyeloid_lymphoidNOT
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Relatestro
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
FilterObjects:[module_num:26|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
    Select the objects to filter:stromal
    Name the output objects:stromalcells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:NOTstromal_NOTmyeloid_NOTlymphoid
    Select the measurement to filter by:Children_newstromal_NOTmyeloid_lymphoidNOT_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
Threshold:[module_num:27|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
    Select the input image:Epithelium_grey
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:2
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    Manual threshold:0.05
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
RemoveHoles:[module_num:28|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
    Select the input image:Threshold
    Name the output image:RemoveHoles
    Size of holes to fill:40

MaskObjects:[module_num:29|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
    Select objects to be masked:NOTstromal_NOTmyeloid_NOTlymphoid
    Name the masked objects:Notstromal_Nottumour_Notlymphoid_Notmyeloid_cells
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Threshold
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskImage:[module_num:30|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
    Select the input image:nucleus
    Name the output image:Masked_nuc
    Use objects or an image as a mask?:Image
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    Select image for mask:RemoveHoles
    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:31|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
    Select the input image:Masked_nuc
    Name the primary objects to be identified:tum_nuc
    Typical diameter of objects, in pixel units (Min,Max):5,50
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1
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    Manual threshold:0.1
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
IdentifySecondaryObjects:[module_num:32|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
    Select the input objects:tum_nuc
    Name the objects to be identified:cancercells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Epithelium_grey
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    Regularization factor:1
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1
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    Manual threshold:0.1
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
CombineObjects:[module_num:33|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
    Select initial object set:lymphoidcells
    Select object set to combine:myeloidcells
    Select how to handle overlapping objects:Preserve
    Name the combined object set:lym_myl_cells

CombineObjects:[module_num:34|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
    Select initial object set:lym_myl_cells
    Select object set to combine:stromalcells
    Select how to handle overlapping objects:Preserve
    Name the combined object set:lym_myl_stro_cells

CombineObjects:[module_num:35|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
    Select initial object set:lym_myl_stro_cells
    Select object set to combine:Notstromal_Nottumour_Notlymphoid_Notmyeloid_cells
    Select how to handle overlapping objects:Preserve
    Name the combined object set:lym_myl_stro_other_cells

CombineObjects:[module_num:36|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
    Select initial object set:lym_myl_stro_other_cells
    Select object set to combine:cancercells
    Select how to handle overlapping objects:Preserve
    Name the combined object set:lym_myl_stro_other_cancer_cells

ExportToSpreadsheet:[module_num:37|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\CellProfiler_export
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_test_
    Overwrite existing files without warning?:No
    Data to export:lym_myl_stro_other_cancer_cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ConvertObjectsToImage:[module_num:38|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
    Select the input objects:lym_myl_stro_other_cancer_cells
    Name the output image:lym_myl_stro_other_cancer_cells_uint16
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:39|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
    Select the input objects:lym_myl_stro_other_cancer_cells
    Name the output image:lym_myl_stro_other_cancer_cells_colour
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:40|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:lym_myl_stro_other_cancer_cells_uint16
    Select method for constructing file names:From image filename
    Select image name for file prefix:nucleus
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask_1
    Saved file format:tiff
    Output file location:Same folder as image|Desktop\\\\IMC_Breast\\\\Test
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:41|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:lym_myl_stro_other_cancer_cells_colour
    Select method for constructing file names:From image filename
    Select image name for file prefix:nucleus
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask_colour
    Saved file format:tiff
    Output file location:Same folder as image|Desktop\\\\IMC_Breast\\\\Test
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ConvertObjectsToImage:[module_num:42|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
    Select the input objects:lymphoidcells
    Name the output image:lymphoidcells_uint16
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:43|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
    Select the input objects:lymphoidcells
    Name the output image:lymphoidcells_colour
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:44|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:lymphoidcells_uint16
    Select method for constructing file names:From image filename
    Select image name for file prefix:nucleus
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask_1
    Saved file format:tiff
    Output file location:Same folder as image|Desktop\\\\IMC_Breast\\\\Test
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:45|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:lymphoidcells_colour
    Select method for constructing file names:From image filename
    Select image name for file prefix:nucleus
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask_1_colour
    Saved file format:tiff
    Output file location:Same folder as image|Desktop\\\\IMC_Breast\\\\Test
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ConvertObjectsToImage:[module_num:46|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
    Select the input objects:myeloidcells
    Name the output image:myeloidcells_uint16
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:47|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
    Select the input objects:myeloidcells
    Name the output image:myeloidcells_colour
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:48|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:myeloidcells_uint16
    Select method for constructing file names:From image filename
    Select image name for file prefix:nucleus
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask_2
    Saved file format:tiff
    Output file location:Same folder as image|Desktop\\\\IMC_Breast\\\\Test
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:49|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:myeloidcells_colour
    Select method for constructing file names:From image filename
    Select image name for file prefix:nucleus
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask_2_colour
    Saved file format:tiff
    Output file location:Same folder as image|Desktop\\\\IMC_Breast\\\\Test
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ConvertObjectsToImage:[module_num:50|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
    Select the input objects:stromalcells
    Name the output image:stromalcells_uint16
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:51|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
    Select the input objects:stromalcells
    Name the output image:stromalcells_colour
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:52|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:stromalcells_uint16
    Select method for constructing file names:From image filename
    Select image name for file prefix:nucleus
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask_3
    Saved file format:tiff
    Output file location:Same folder as image|Desktop\\\\IMC_Breast\\\\Test
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:53|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:stromalcells_colour
    Select method for constructing file names:From image filename
    Select image name for file prefix:nucleus
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask_3_colour
    Saved file format:tiff
    Output file location:Same folder as image|Desktop\\\\IMC_Breast\\\\Test
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ConvertObjectsToImage:[module_num:54|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
    Select the input objects:Notstromal_Nottumour_Notlymphoid_Notmyeloid_cells
    Name the output image:othercells_uint16
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:55|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
    Select the input objects:Notstromal_Nottumour_Notlymphoid_Notmyeloid_cells
    Name the output image:othercells_colour
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:56|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:othercells_uint16
    Select method for constructing file names:From image filename
    Select image name for file prefix:nucleus
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask_4
    Saved file format:tiff
    Output file location:Same folder as image|Desktop\\\\IMC_Breast\\\\Test
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:57|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:othercells_colour
    Select method for constructing file names:From image filename
    Select image name for file prefix:nucleus
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask_4_colour
    Saved file format:tiff
    Output file location:Same folder as image|Desktop\\\\IMC_Breast\\\\Test
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ConvertObjectsToImage:[module_num:58|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
    Select the input objects:cancercells
    Name the output image:cancercells_uint16
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:59|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
    Select the input objects:cancercells
    Name the output image:cancercells_colour
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:60|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:cancercells_uint16
    Select method for constructing file names:From image filename
    Select image name for file prefix:nucleus
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask_5
    Saved file format:tiff
    Output file location:Same folder as image|Desktop\\\\IMC_Breast\\\\Test
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:61|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:cancercells_colour
    Select method for constructing file names:From image filename
    Select image name for file prefix:nucleus
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask_5_colour
    Saved file format:tiff
    Output file location:Same folder as image|Desktop\\\\IMC_Breast\\\\Test
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
